PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800,800]
  expName = game
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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  Routine MainGame
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    ImageComponent Background
      image = Assets/background.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent dino_image
      image = Assets/dino.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    CodeComponent DinoMovement
      Code Type = Py
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      Begin Experiment:
        # Import the Keyboard class
        from psychopy.hardware import keyboard

        # Initialize the Keyboard
        kb = keyboard.Keyboard()

        # Initialize Dino's position and movement variables
        dino_pos = [0, 0]  # Starting position [x, y]
        dino_speed = 0  # Initial vertical speed
        gravity = -0.00006  # Downward acceleration
        jump_speed = 0.005  # Jumping speed
        move_speed = 0.01  # Horizontal movement speed
        ground_offset = 0.03
      Each Frame:
        # Get the current state of the keyboard
        keys_pressed = kb.getKeys(['left', 'right', 'up'], waitRelease=False, clear=False)

        # Initialize key state flags
        left_pressed = False
        right_pressed = False
        up_pressed = False

        # Update key state flags based on keys currently pressed
        for key in keys_pressed:
            if key.name == 'left':
                left_pressed = True
            if key.name == 'right':
                right_pressed = True
            if key.name == 'up':
                up_pressed = True

        # Apply gravity to Dino's vertical speed
        dino_speed += gravity

        # Jumping mechanism
        dino_height = dino_image.size[1] / 2  # Half the Dino's height
        floor_top = floor.pos[1] + (floor.size[1] / 2)  # Top of the floor
        dino_bottom = dino_pos[1] - dino_height  # Bottom of the Dino

        # Collision with the floor: Prevent falling through the ground
        if dino_bottom <= floor_top:  # Collision detection
            # Snap Dino visually closer to the floor only if it's falling
            if dino_speed < 0:  # Only snap when Dino is moving downward
                dino_pos[1] = floor_top + dino_height - ground_offset
                dino_speed = 0  # Reset vertical speed to stop falling

        # Jumping logic: Allow jump any time the 'up' key is pressed
        if up_pressed:
            dino_speed = jump_speed  # Apply upward movement

        # Update Dino's vertical position
        dino_pos[1] += dino_speed  # Update vertical position

        # Continuous horizontal movement only if keys are pressed
        if left_pressed:
            dino_pos[0] -= move_speed  # Move Dino to the left
        if right_pressed:
            dino_pos[0] += move_speed  # Move Dino to the right

        # Update the Dino's position in the game
        dino_image.pos = dino_pos  # Set Dino's position based on updated values
    PolygonComponent floor
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0,-.5)
      shape = rectangle
      size = (1,0.3)
      startVal [time (s)] = 0.0
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Flow
  Routine MainGame
